PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DecodingPhase
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Routines
  Routine trial
    TextComponent word_cue
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = $texten
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    RatingScaleComponent Posneturalneg
      forceEndRoutine = True
      high = 3
      labels = negative, neutral, positive 
      low = 1
      pos = 0, -0.4
      scaleDescription = Rate your emotional association.
      size = 1.0
      startVal [time (s)] = 5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionsTest.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('texten', 'Paradox'), ('bilden', 'brain1.jpg')]),
      OrderedDict([('texten', 'Derivata'), ('bilden', 'brain2.jpg')])]
    Routine trial
  LoopTerminator trials
