PsychoPy2experiment version="2020.2.8"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = DecodingEmotions
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Routines
  Routine Distraction
    TextComponent Distraction_text
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = $distraction_time
      text = Try to solve the arthimetic tasks on the paper in front of you, until the screen shows the next instructions.
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  Routine Retrival
    TextComponent Word_cue
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 6
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    TextComponent memory_check
      color = red
      durationEstim = 2
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [condition] = $key_resp.status == FINISHED
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      text:
        Choose what category the image matched with the word cue had?
        Press keyboar button accordingly.
        If you don't know please choose "Unsure"

        1) Positive face
        2) Neutral face
        3) Negative face
        4) Positive scene
        5) Neutral scene
        6) Negative scene
        7) Unsure
  Routine Training
    TextComponent text
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $word
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    ImageComponent image
      image [set every repeat] = $imageFromFolder
      size = (0.5, 0.5)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 2.5
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    ImageComponent image2
      image [set every repeat] = $imageFromFolder
      size = (0.5, 0.5)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.5
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    TextComponent text2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $word
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    TextComponent text_2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
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      text:
        You have 5 seconds rest.

        Try to blink here and not during the learning phase
  Routine Instructions_for_retrival
    TextComponent Instructions
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = $instruction_time
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      text:
        Now you will be presented with a word.

        Try to image the image shown in conjugtion to it.

        After a small time for each word you will be able to choose if the word was positive negative or neutral and if it was a face or a scene.
  Routine Instructions_for_training
    TextComponent instructions_for_training
      color = Red
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = $time_instructions_training
      text = You will see words and images. Remember the images connected to each word.
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = cond_batch_def.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('batch_start', 0), ('batch_end', 2)]),
      OrderedDict([('batch_start', 2), ('batch_end', 3)])]
    Routine Instructions_for_training
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditionFile
      isTrials = False
      loopType = random
      nReps = 1
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      Routine Training
    LoopTerminator trials
    Routine Distraction
    Routine Instructions_for_retrival
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $conditionFile
      isTrials = False
      loopType = random
      nReps = 1
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      Routine Retrival
    LoopTerminator trials_2
  LoopTerminator trials_3
